opentrons/protocol-designer 5.2.3
schemaVersion: 3
protocolName: test
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: left}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 10 µL: {definitionId: opentrons/opentrons_96_tiprack_10ul/1, slot: 1}
  tubes: {definitionId: opentrons/opentrons_24_tuberack_eppendorf_1.5ml_safelock_snapcap/1, slot: 4}
  well plate: {definitionId: opentrons/biorad_96_wellplate_200ul_pcr/1, slot: 5}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_tiprack_10ul/1
ingredients:
  - liquid1: {description: water}
ingredLocations:
  tubes:
    liquid1 {volume: 1200}: A1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: once
  aspirate_labware: tubes
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: well plate
  dispense_wells: A1-F1, A2-F2, A3-F3, A4-F4, A5-F5
  dispense_mmFromBottom: 0.5
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p20_single_gen2, labware: Opentrons 96 Tip Rack 10 µL, well: A1}
- aspirate: {pipette: p20_single_gen2, volume: 5, labware: tubes, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 5, labware: well plate, well: A1, offsetFromBottomMm: 0.5, flowRate: 3.78}
- aspirate: {pipette: p20_single_gen2, volume: 5, labware: tubes, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 5, labware: well plate, well: B1, offsetFromBottomMm: 0.5, flowRate: 3.78}
- aspirate: {pipette: p20_single_gen2, volume: 5, labware: tubes, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
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